#pragma once
#include "HSLSeqLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\Tools\\PipetteTools.hs_"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace _96CHANNEL {
  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _Get96PositionSequence( device & ML_STAR, variable SequenceString, sequence & Sequence ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    PIPETTETOOLS::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    PIPETTETOOLS::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable SequenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable SequencePositionArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable SeqEnd;
    private variable LiquidFollowing;
    private variable Mode;
    private variable FixedHeight;
    private variable cLLD;
    private variable MixPosition;
    private variable MixCycles;
    private variable RetractDistance;
    private variable SubmergeDepth;
    private variable Volume;
    private variable LiquidClass;
    private variable MixVolume;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable SequenceString;
    SequenceString = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"));
    Volume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"));
    Mode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    cLLD = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"));
    SubmergeDepth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"));
    FixedHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"));
    LiquidFollowing = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"));
    MixCycles = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"));
    MixPosition = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"));
    MixVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"));
    _Get96PositionSequence(ML_STAR, SequenceString, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable SeqEnd;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable SequenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SideTouchArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable SequencePositionArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable Mode;
    private variable LiquidFollowing;
    private variable cLLD;
    private variable FixedHeight;
    private variable MixPosition;
    private variable MixCycles;
    private variable MixVolume;
    private variable SideTouch;
    private variable SubmergeDepth;
    private variable RetractDistance;
    private variable Volume;
    private variable LiquidClass;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable SequenceString;
    SequenceString = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"));
    Volume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"));
    Mode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"));
    FixedHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"));
    cLLD = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"));
    SubmergeDepth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    SideTouch = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SideTouch:"));
    LiquidFollowing = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"));
    MixCycles = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"));
    MixPosition = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"));
    MixVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"));
    _Get96PositionSequence(ML_STAR, SequenceString, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable ChannelNumberArray[];
    private variable SequencePositionArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable Counter;
    private variable SequenceString;
    private variable SequenceStringArray[];
    private variable SequencePositionsArray[];
    SequenceString = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"));
    _Get96PositionSequence(ML_STAR, SequenceString, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CustomErrorHandling;
    private variable ChannelSelection;
    private variable Message;
    private variable State;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable ChannelNumberArray[];
    private variable SequencePositionArray[];
    private object o_JSONObject;
    private variable SequenceString;
    SequenceString = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"));
    _Get96PositionSequence(ML_STAR, SequenceString, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "'Pickup")
    {
      Pickup(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Aspirate")
    {
      Aspirate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Dispense")
    {
      Dispense(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Eject")
    {
      Eject(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  function _Get96PositionSequence( device & ML_STAR, variable SequenceString, sequence & Sequence ) void {
    private variable Counter;
    private variable SequenceStringArray[];
    private variable SequencePositionsArray[];
    SequenceStringArray.SetSize(0);
    SequencePositionsArray.SetSize(0);
    {
      for(Counter = 0; Counter < 96;)
      {
        Counter = Counter + 1;
        SequenceStringArray.AddAsLast(SequenceString);
        SequencePositionsArray.AddAsLast(Counter);
      }
    }
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceStringArray, SequencePositionsArray, Sequence);
  }
} // library namespace
